PsychoPy2experiment version="2024.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1536, 864]
  expName = TEZ1
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Inst_1
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    TextComponent Inst_1_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Visual Search Task deneyine hoşgeldiniz !

        Bir sonraki aşamaya geçebilmek için istediğiniz bir tuşa basabilirsiniz.
    KeyboardComponent Inst_1_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst_2
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    TextComponent Inst_2_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Asıl deneye geçmeden önce alıştırma turu olacaktır.

        Birazdan karşınıza çıkacak olan kareler yeşil renkte ise Y tuşuna, mavi renkte ise M tuşuna basınız.
    KeyboardComponent Inst_2_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst_3
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    TextComponent Inst_3_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Alıştırma bölümü bitmiştir.

        Deneyin asıl bölümünde mavi veya yeşil kareler göreceksiniz.

        Diğerlerinden farklı renkte olan kare sol tarafta gözüktüyse "q" tuşuna, sağ tarafta gözüktüyse "p" tuşuna basınız.
    KeyboardComponent Inst_3_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst_4
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    TextComponent white
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Kendinizi hazır hissettiğinizde, herhangi bir tuşa basarak deneye başlayabilirsiniz.

         Sol = "q", Sağ = "p"
    KeyboardComponent Inst_4_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
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    TextComponent Ending
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Deney bitmiştir

        Çalışmama katılım gösterdiğiniz için teşekkür ederim :)
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial_AB
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    PolygonComponent fixationCross
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
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    PolygonComponent fixationCross_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 1.5
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    PolygonComponent dist1
      fillColor [set every repeat] = $[R1, G1, B1]
      lineColor [set every repeat] = $[R1, G1, B1]
      pos = (1, 4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist2
      fillColor [set every repeat] = $[R2, G2, B2]
      lineColor [set every repeat] = $[R2, G2, B2]
      pos = (3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist3
      fillColor [set every repeat] = $[R3, G3, B3]
      lineColor [set every repeat] = $[R3, G3, B3]
      pos = (4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist4
      fillColor [set every repeat] = $[R4, G4, B4]
      lineColor [set every repeat] = $[R4, G4, B4]
      pos = (4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist5
      fillColor [set every repeat] = $[R5, G5, B5]
      lineColor [set every repeat] = $[R5, G5, B5]
      pos = (3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist6
      fillColor [set every repeat] = $[R6, G6, B6]
      lineColor [set every repeat] = $[R6, G6, B6]
      pos = (1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist7
      fillColor [set every repeat] = $[R7, G7, B7]
      lineColor [set every repeat] = $[R7, G7, B7]
      pos = (-1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist8
      fillColor [set every repeat] = $[R8, G8, B8]
      lineColor [set every repeat] = $[R8, G8, B8]
      pos = (-3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist9
      fillColor [set every repeat] = $[R9, G9, B9]
      lineColor [set every repeat] = $[R9, G9, B9]
      pos = (-4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist10
      fillColor [set every repeat] = $[R10, G10, B10]
      lineColor [set every repeat] = $[R10, G10, B10]
      pos = (-4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist11
      fillColor [set every repeat] = $[R11, G11, B11]
      lineColor [set every repeat] = $[R11, G11, B11]
      pos = (-3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist12
      fillColor [set every repeat] = $[R12, G12, B12]
      lineColor [set every repeat] = $[R12, G12, B12]
      pos = (-1, 4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    KeyboardComponent trial_key_resp
      allowedKeys = 'q','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine NonVerbalInt
    RoutineSettingsComponent NonVerbalInt
      stopVal [duration (s)] = 1.25
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    ImageComponent grids
      image [set every repeat] = $Grids
      size = (8, 8)
      startVal [time (s)] = 0.0
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  Routine Trial_BC
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    PolygonComponent fixationCross_3
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
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    PolygonComponent fixationCross_4
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 1.5
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    PolygonComponent dist1_2
      fillColor [set every repeat] = $[R1, G1, B1]
      lineColor [set every repeat] = $[R1, G1, B1]
      pos = (1, 4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist2_2
      fillColor [set every repeat] = $ [R2, G2, B2]
      lineColor [set every repeat] = $ [R2, G2, B2]
      pos = (3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist3_2
      fillColor [set every repeat] = $ [R3, G3, B3]
      lineColor [set every repeat] = $ [R3, G3, B3]
      pos = (4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist4_2
      fillColor [set every repeat] = $ [R4, G4, B4]
      lineColor [set every repeat] = $ [R4, G4, B4]
      pos = (4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist5_2
      fillColor [set every repeat] = $ [R5, G5, B5]
      lineColor [set every repeat] = $ [R5, G5, B5]
      pos = (3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist6_2
      fillColor [set every repeat] = $ [R6, G6, B6]
      lineColor [set every repeat] = $ [R6, G6, B6]
      pos = (1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist7_2
      fillColor [set every repeat] = $ [R7, G7, B7]
      lineColor [set every repeat] = $ [R7, G7, B7]
      pos = (-1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist8_2
      fillColor [set every repeat] = $ [R8, G8, B8]
      lineColor [set every repeat] = $ [R8, G8, B8]
      pos = (-3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist9_2
      fillColor [set every repeat] = $ [R9, G9, B9]
      lineColor [set every repeat] = $ [R9, G9, B9]
      pos = (-4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist10_2
      fillColor [set every repeat] = $ [R10, G10, B10]
      lineColor [set every repeat] = $ [R10, G10, B10]
      pos = (-4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist11_2
      fillColor [set every repeat] = $ [R11, G11, B11]
      lineColor [set every repeat] = $ [R11, G11, B11]
      pos = (-3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist12_2
      fillColor [set every repeat] = $ [R12, G12, B12]
      lineColor [set every repeat] = $ [R12, G12, B12]
      pos = (-1, 4)
      shape = rectangle
      size = (1.2, 1.2)
      startVal [time (s)] = 1.5
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    KeyboardComponent trial_key_resp_2
      allowedKeys = 'q','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine Trial_CD
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    PolygonComponent fixationCross_5
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
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    PolygonComponent fixationCross_6
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 1.5
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    PolygonComponent dist1_3
      fillColor [set every repeat] = $ [R1, G1, B1]
      lineColor [set every repeat] = $ [R1, G1, B1]
      pos = (1, 4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist2_3
      fillColor [set every repeat] = $ [R2, G2, B2]
      lineColor [set every repeat] = $ [R2, G2, B2]
      pos = (3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist3_3
      fillColor [set every repeat] = $ [R3, G3, B3]
      lineColor [set every repeat] = $ [R3, G3, B3]
      pos = (4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist4_3
      fillColor [set every repeat] = $ [R4, G4, B4]
      lineColor [set every repeat] = $ [R4, G4, B4]
      pos = (4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist5_3
      fillColor [set every repeat] = $ [R5, G5, B5]
      lineColor [set every repeat] = $ [R5, G5, B5]
      pos = (3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist6_3
      fillColor [set every repeat] = $ [R6, G6, B6]
      lineColor [set every repeat] = $ [R6, G6, B6]
      pos = (1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist7_3
      fillColor [set every repeat] = $ [R7, G7, B7]
      lineColor [set every repeat] = $ [R7, G7, B7]
      pos = (-1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist8_3
      fillColor [set every repeat] = $ [R8, G8, B8]
      lineColor [set every repeat] = $ [R8, G8, B8]
      pos = (-3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist9_3
      fillColor [set every repeat] = $ [R9, G9, B9]
      lineColor [set every repeat] = $ [R9, G9, B9]
      pos = (-4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist10_3
      fillColor [set every repeat] = $ [R10, G10, B10]
      lineColor [set every repeat] = $ [R10, G10, B10]
      pos = (-4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist11_3
      fillColor [set every repeat] = $ [R11, G11, B11]
      lineColor [set every repeat] = $ [R11, G11, B11]
      pos = (-3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist12_3
      fillColor [set every repeat] = $ [R12, G12, B12]
      lineColor [set every repeat] = $ [R12, G12, B12]
      pos = (-1, 4)
      shape = rectangle
      size = (1.2, 1.2)
      startVal [time (s)] = 1.5
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    KeyboardComponent trial_key_resp_3
      allowedKeys = 'q','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine Verbal_Int
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    TextComponent text
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Words
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  Routine Trial_AC
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    PolygonComponent fixationCross_8
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
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    PolygonComponent fixationCross_9
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 1.5
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    PolygonComponent dist1_4
      fillColor [set every repeat] = $ [R1, G1, B1]
      lineColor [set every repeat] = $ [R1, G1, B1]
      pos = (1, 4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist2_4
      fillColor [set every repeat] = $ [R2, G2, B2]
      lineColor [set every repeat] = $ [R2, G2, B2]
      pos = (3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist3_4
      fillColor [set every repeat] = $ [R3, G3, B3]
      lineColor [set every repeat] = $ [R3, G3, B3]
      pos = (4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist4_4
      fillColor [set every repeat] = $ [R4, G4, B4]
      lineColor [set every repeat] = $ [R4, G4, B4]
      pos = (4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist5_4
      fillColor [set every repeat] = $ [R5, G5, B5]
      lineColor [set every repeat] = $ [R5, G5, B5]
      pos = (3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist6_4
      fillColor [set every repeat] = $ [R6, G6, B6]
      lineColor [set every repeat] = $ [R6, G6, B6]
      pos = (1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist7_4
      fillColor [set every repeat] = $ [R7, G7, B7]
      lineColor [set every repeat] = $ [R7, G7, B7]
      pos = (-1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist8_4
      fillColor [set every repeat] = $ [R8, G8, B8]
      lineColor [set every repeat] = $ [R8, G8, B8]
      pos = (-3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist9_4
      fillColor [set every repeat] = $ [R9, G9, B9]
      lineColor [set every repeat] = $ [R9, G9, B9]
      pos = (-4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist10_4
      fillColor [set every repeat] = $ [R10, G10, B10]
      lineColor [set every repeat] = $ [R10, G10, B10]
      pos = (-4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist11_4
      fillColor [set every repeat] = $ [R11, G11, B11]
      lineColor [set every repeat] = $ [R11, G11, B11]
      pos = (-3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist12_4
      fillColor [set every repeat] = $ [R12, G12, B12]
      lineColor [set every repeat] = $ [R12, G12, B12]
      pos = (-1, 4)
      shape = rectangle
      size = (1.2, 1.2)
      startVal [time (s)] = 1.5
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    KeyboardComponent trial_key_resp_4
      allowedKeys = 'q','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine Trial_BD
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    PolygonComponent fixationCross_10
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1
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    PolygonComponent fixationCross_11
      fillColor = black
      lineColor = black
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 1.5
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    PolygonComponent dist1_5
      fillColor [set every repeat] = $ [R1, G1, B1]
      lineColor [set every repeat] = $ [R1, G1, B1]
      pos = (1, 4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist2_5
      fillColor [set every repeat] = $ [R2, G2, B2]
      lineColor [set every repeat] = $ [R2, G2, B2]
      pos = (3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist3_5
      fillColor [set every repeat] = $ [R3, G3, B3]
      lineColor [set every repeat] = $ [R3, G3, B3]
      pos = (4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist4_5
      fillColor [set every repeat] = $ [R4, G4, B4]
      lineColor [set every repeat] = $ [R4, G4, B4]
      pos = (4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist5_5
      fillColor [set every repeat] = $ [R5, G5, B5]
      lineColor [set every repeat] = $ [R5, G5, B5]
      pos = (3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist6_5
      fillColor [set every repeat] = $ [R6, G6, B6]
      lineColor [set every repeat] = $ [R6, G6, B6]
      pos = (1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist7_5
      fillColor [set every repeat] = $ [R7, G7, B7]
      lineColor [set every repeat] = $ [R7, G7, B7]
      pos = (-1, -4)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist8_5
      fillColor [set every repeat] = $ [R8, G8, B8]
      lineColor [set every repeat] = $ [R8, G8, B8]
      pos = (-3, -3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist9_5
      fillColor [set every repeat] = $ [R9, G9, B9]
      lineColor [set every repeat] = $ [R9, G9, B9]
      pos = (-4, -1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist10_5
      fillColor [set every repeat] = $ [R10, G10, B10]
      lineColor [set every repeat] = $ [R10, G10, B10]
      pos = (-4, 1)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist11_5
      fillColor [set every repeat] = $ [R11, G11, B11]
      lineColor [set every repeat] = $ [R11, G11, B11]
      pos = (-3, 3)
      shape = rectangle
      size = (1.2,1.2)
      startVal [time (s)] = 1.5
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    PolygonComponent dist12_5
      fillColor [set every repeat] = $ [R12, G12, B12]
      lineColor [set every repeat] = $ [R12, G12, B12]
      pos = (-1, 4)
      shape = rectangle
      size = (1.2, 1.2)
      startVal [time (s)] = 1.5
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    KeyboardComponent trial_key_resp_5
      allowedKeys = 'q','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine routine_1
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    ImageComponent image
      image [set every repeat] = Grids/Image File.xlsx
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine routine
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    ImageComponent image_2
      image [set every repeat] = $Grids
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine routine_2
    RoutineSettingsComponent routine_2
      stopVal [duration (s)] = 3
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    ApertureComponent aperture
      shape = rectangle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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  Routine Mask
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    ImageComponent image_3
      image = Backward Mask.jpg
      size = (8, 8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine nonVerbInf
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    ImageComponent grids_2
      image [set every repeat] = $Grids
      size = (8, 8)
      startVal [time (s)] = 0.0
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  Routine mask
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    ImageComponent image_4
      image = Backward Mask.jpg
      size = (8, 8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine NonVerbal_Trial
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  Routine LexicalBoundary
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    PolygonComponent target
      fillColor [set every repeat] = $[R, G, B]
      lineColor [set every repeat] = $[R, G, B]
      shape = rectangle
      size = (3,3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    KeyboardComponent target_key
      allowedKeys = 'm','y'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  Routine Inst_1
  Routine Inst_2
  LoopInitiator lexicalBoundary loopType="TrialHandler"
    conditionsFile = Lexical Boundary Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%7.5G', 'R': -0.3725490196, 'G': 0.043137254999999985, 'B': -0.20784313720000003, 'corrAns': 'y'},
      {'Munsell': '%2.5BG', 'R': -0.43529411799999995, 'G': 0.05882352999999996, 'B': -0.12941176399999998, 'corrAns': 'y'},
      {'Munsell': '%2.5BG', 'R': -0.43529411799999995, 'G': 0.05882352999999996, 'B': -0.12941176399999998, 'corrAns': 'y'},
      {'Munsell': '%2.5BG', 'R': -0.43529411799999995, 'G': 0.05882352999999996, 'B': -0.12941176399999998, 'corrAns': 'y'}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
    Routine LexicalBoundary
  LoopTerminator lexicalBoundary
  Routine Inst_3
  Routine Inst_4
  LoopInitiator VerbalInt loopType="TrialHandler"
    conditionsFile = Verbal Interference Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words': 'Bej'},
      {'Words': 'Siyah'},
      {'Words': 'Kahverengi'},
      {'Words': 'Gri'},
      {'Words': 'Turuncu'},
      {'Words': 'Pembe'},
      {'Words': 'Mor'},
      {'Words': 'Kırmızı'},
      {'Words': 'Eflatun'},
      {'Words': 'Beyaz'},
      {'Words': 'Sarı'}]
    Routine Verbal_Int
  LoopTerminator VerbalInt
  LoopInitiator trial loopType="TrialHandler"
    conditionsFile = Trial Conditions AB.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cnd': 'dist1', 'R1': -0.3725490196, 'G1': 0.043137254999999985, 'B1': -0.20784313720000003, 'R2': -0.3725490196, 'G2': 0.043137254999999985, 'B2': -0.20784313720000003, 'R3': -0.3725490196, 'G3': 0.043137254999999985, 'B3': -0.20784313720000003, 'R4': -0.3725490196, 'G4': 0.043137254999999985, 'B4': -0.20784313720000003, 'R5': -0.3725490196, 'G5': 0.043137254999999985, 'B5': -0.20784313720000003, 'R6': -0.3725490196, 'G6': 0.043137254999999985, 'B6': -0.20784313720000003, 'R7': -0.3725490196, 'G7': 0.043137254999999985, 'B7': -0.20784313720000003, 'R8': -0.3725490196, 'G8': 0.04313725499999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,
      {'cnd': 'dist2', 'R1': -0.3725490196, 'G1': 0.043137254999999985, 'B1': -0.20784313720000003, 'R2': -0.3725490196, 'G2': 0.043137254999999985, 'B2': -0.20784313720000003, 'R3': -0.3725490196, 'G3': 0.043137254999999985, 'B3': -0.20784313720000003, 'R4': -0.3725490196, 'G4': 0.043137254999999985, 'B4': -0.20784313720000003, 'R5': -0.3725490196, 'G5': 0.043137254999999985, 'B5': -0.20784313720000003, 'R6': -0.3725490196, 'G6': 0.043137254999999985, 'B6': -0.20784313720000003, 'R7': -0.3725490196, 'G7': 0.043137254999999985, 'B7': -0.20784313720000003, 'R8': -0.3725490196, 'G8': 0.043137254999999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,
      {'cnd': 'dist3', 'R1': -0.3725490196, 'G1': 0.043137254999999985, 'B1': -0.20784313720000003, 'R2': -0.3725490196, 'G2': 0.043137254999999985, 'B2': -0.20784313720000003, 'R3': -0.3725490196, 'G3': 0.043137254999999985, 'B3': -0.20784313720000003, 'R4': -0.3725490196, 'G4': 0.043137254999999985, 'B4': -0.20784313720000003, 'R5': -0.3725490196, 'G5': 0.043137254999999985, 'B5': -0.20784313720000003, 'R6': -0.3725490196, 'G6': 0.043137254999999985, 'B6': -0.20784313720000003, 'R7': -0.3725490196, 'G7': 0.043137254999999985, 'B7': -0.20784313720000003, 'R8': -0.3725490196, 'G8': 0.043137254999999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,
      {'cnd': 'dist4', 'R1': -0.3725490196, 'G1': 0.043137254999999985, 'B1': -0.20784313720000003, 'R2': -0.3725490196, 'G2': 0.043137254999999985, 'B2': -0.20784313720000003, 'R3': -0.3725490196, 'G3': 0.043137254999999985, 'B3': -0.20784313720000003, 'R4': -0.3725490196, 'G4': 0.043137254999999985, 'B4': -0.20784313720000003, 'R5': -0.3725490196, 'G5': 0.043137254999999985, 'B5': -0.20784313720000003, 'R6': -0.3725490196, 'G6': 0.043137254999999985, 'B6': -0.20784313720000003, 'R7': -0.3725490196, 'G7': 0.043137254999999985, 'B7': -0.20784313720000003, 'R8': -0.3725490196, 'G8': 0.043137254999999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
    Routine Trial_AB
  LoopTerminator trial
  Routine Mask
  LoopInitiator nonVerInt loopType="TrialHandler"
    conditionsFile = Grid.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Grids': 'Grids/grid1.jpg'},
      {'Grids': 'Grids/grid2.jpg'},
      {'Grids': 'Grids/grid3.jpg'},
      {'Grids': 'Grids/grid4.jpg'},
      {'Grids': 'Grids/grid5.jpg'},
      {'Grids': 'Grids/grid6.jpg'},
      {'Grids': 'Grids/grid7.jpg'},
      {'Grids': 'Grids/grid8.jpg'},
      {'Grids': 'Grids/grid9.jpg'},
      {'Grids': 'Grids/grid10.jpg'},
      {'Grids': 'Grids/grid11.jpg'},
      {'Grids': 'Grids/grid12.jpg'},
      {'Grids': 'Grids/grid13.jpg'},
      {'Grids': 'Grids/grid14.jpg'},
      {'Grids': 'Grids/grid15.jpg'}]
    Routine NonVerbalInt
  LoopTerminator nonVerInt
  LoopInitiator trial2 loopType="TrialHandler"
    conditionsFile = Trial Condition BC.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cnd': 'dist1', 'R1': -0.43529411799999995, 'G1': 0.05882352999999996, 'B1': -0.12941176399999998, 'R2': -0.43529411799999995, 'G2': 0.05882352999999996, 'B2': -0.12941176399999998, 'R3': -0.43529411799999995, 'G3': 0.05882352999999996, 'B3': -0.12941176399999998, 'R4': -0.43529411799999995, 'G4': 0.05882352999999996, 'B4': -0.12941176399999998, 'R5': -0.43529411799999995, 'G5': 0.05882352999999996, 'B5': -0.12941176399999998, 'R6': -0.43529411799999995, 'G6': 0.05882352999999996, 'B6': -0.12941176399999998, 'R7': -0.43529411799999995, 'G7': 0.05882352999999996, 'B7': -0.12941176399999998, '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,
      {'cnd': 'dist2', 'R1': -0.43529411799999995, 'G1': 0.05882352999999996, 'B1': -0.12941176399999998, 'R2': -0.43529411799999995, 'G2': 0.05882352999999996, 'B2': -0.12941176399999998, 'R3': -0.43529411799999995, 'G3': 0.05882352999999996, 'B3': -0.12941176399999998, 'R4': -0.43529411799999995, 'G4': 0.05882352999999996, 'B4': -0.12941176399999998, 'R5': -0.43529411799999995, 'G5': 0.05882352999999996, 'B5': -0.12941176399999998, 'R6': -0.43529411799999995, 'G6': 0.05882352999999996, 'B6': -0.12941176399999998, 'R7': -0.43529411799999995, 'G7': 0.05882352999999996, 'B7': -0.12941176399999998, 'R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,
      {'cnd': 'dist3', 'R1': -0.43529411799999995, 'G1': 0.05882352999999996, 'B1': -0.12941176399999998, 'R2': -0.43529411799999995, 'G2': 0.05882352999999996, 'B2': -0.12941176399999998, 'R3': -0.43529411799999995, 'G3': 0.05882352999999996, 'B3': -0.12941176399999998, 'R4': -0.43529411799999995, 'G4': 0.05882352999999996, 'B4': -0.12941176399999998, 'R5': -0.43529411799999995, 'G5': 0.05882352999999996, 'B5': -0.12941176399999998, 'R6': -0.43529411799999995, 'G6': 0.05882352999999996, 'B6': -0.12941176399999998, 'R7': -0.43529411799999995, 'G7': 0.05882352999999996, 'B7': -0.12941176399999998, 'R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,
      {'cnd': 'dist4', 'R1': -0.43529411799999995, 'G1': 0.05882352999999996, 'B1': -0.12941176399999998, 'R2': -0.43529411799999995, 'G2': 0.05882352999999996, 'B2': -0.12941176399999998, 'R3': -0.43529411799999995, 'G3': 0.05882352999999996, 'B3': -0.12941176399999998, 'R4': -0.43529411799999995, 'G4': 0.05882352999999996, 'B4': -0.12941176399999998, 'R5': -0.43529411799999995, 'G5': 0.05882352999999996, 'B5': -0.12941176399999998, 'R6': -0.43529411799999995, 'G6': 0.05882352999999996, 'B6': -0.12941176399999998, 'R7': -0.43529411799999995, 'G7': 0.05882352999999996, 'B7': -0.12941176399999998, 'R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
    Routine Trial_BC
  LoopTerminator trial2
  LoopInitiator trial3 loopType="TrialHandler"
    conditionsFile = Trial Condition CD.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cnd': 'dist1', 'R1': -0.45882352940000004, 'G1': 0.0352941175999999, 'B1': -0.03529411760000001, 'R2': -0.45882352940000004, 'G2': 0.0352941175999999, 'B2': -0.03529411760000001, 'R3': -0.45882352940000004, 'G3': 0.0352941175999999, 'B3': -0.03529411760000001, 'R4': -0.45882352940000004, 'G4': 0.0352941175999999, 'B4': -0.03529411760000001, 'R5': -0.45882352940000004, 'G5': 0.0352941175999999, 'B5': -0.03529411760000001, 'R6': -0.45882352940000004, 'G6': 0.0352941175999999, 'B6': -0.03529411760000001, 'R7': -0.45882352940000004, 'G7': 0.0352941175999999, 'B7': -0.03529411760000001, 'R8': -0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,
      {'cnd': 'dist2', 'R1': -0.45882352940000004, 'G1': 0.0352941175999999, 'B1': -0.03529411760000001, 'R2': -0.45882352940000004, 'G2': 0.0352941175999999, 'B2': -0.03529411760000001, 'R3': -0.45882352940000004, 'G3': 0.0352941175999999, 'B3': -0.03529411760000001, 'R4': -0.45882352940000004, 'G4': 0.0352941175999999, 'B4': -0.03529411760000001, 'R5': -0.45882352940000004, 'G5': 0.0352941175999999, 'B5': -0.03529411760000001, 'R6': -0.45882352940000004, 'G6': 0.0352941175999999, 'B6': -0.03529411760000001, 'R7': -0.45882352940000004, 'G7': 0.0352941175999999, 'B7': -0.03529411760000001, 'R8': -0.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,
      {'cnd': 'dist3', 'R1': -0.45882352940000004, 'G1': 0.0352941175999999, 'B1': -0.03529411760000001, 'R2': -0.45882352940000004, 'G2': 0.0352941175999999, 'B2': -0.03529411760000001, 'R3': -0.45882352940000004, 'G3': 0.0352941175999999, 'B3': -0.03529411760000001, 'R4': -0.45882352940000004, 'G4': 0.0352941175999999, 'B4': -0.03529411760000001, 'R5': -0.45882352940000004, 'G5': 0.0352941175999999, 'B5': -0.03529411760000001, 'R6': -0.45882352940000004, 'G6': 0.0352941175999999, 'B6': -0.03529411760000001, 'R7': -0.45882352940000004, 'G7': 0.0352941175999999, 'B7': -0.03529411760000001, 'R8': -0.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,
      {'cnd': 'dist4', 'R1': -0.45882352940000004, 'G1': 0.0352941175999999, 'B1': -0.03529411760000001, 'R2': -0.45882352940000004, 'G2': 0.0352941175999999, 'B2': -0.03529411760000001, 'R3': -0.45882352940000004, 'G3': 0.0352941175999999, 'B3': -0.03529411760000001, 'R4': -0.45882352940000004, 'G4': 0.0352941175999999, 'B4': -0.03529411760000001, 'R5': -0.45882352940000004, 'G5': 0.0352941175999999, 'B5': -0.03529411760000001, 'R6': -0.45882352940000004, 'G6': 0.0352941175999999, 'B6': -0.03529411760000001, 'R7': -0.45882352940000004, 'G7': 0.0352941175999999, 'B7': -0.03529411760000001, 'R8': -0.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
    Routine Trial_CD
  LoopTerminator trial3
  LoopInitiator Trial loopType="TrialHandler"
    conditionsFile = Trial Condition AC .xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Trial_AC
  LoopTerminator Trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trial Condition BD.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cnd': 'dist1', 'R1': -0.44313725400000004, 'G1': 0.01960784400000004, 'B1': 0.0431372539999999, 'R2': -0.44313725400000004, 'G2': 0.01960784400000004, 'B2': 0.0431372539999999, 'R3': -0.44313725400000004, 'G3': 0.01960784400000004, 'B3': 0.0431372539999999, 'R4': -0.44313725400000004, 'G4': 0.01960784400000004, 'B4': 0.0431372539999999, 'R5': -0.44313725400000004, 'G5': 0.01960784400000004, 'B5': 0.0431372539999999, 'R6': -0.44313725400000004, 'G6': 0.01960784400000004, 'B6': 0.0431372539999999, 'R7': -0.44313725400000004, 'G7': 0.01960784400000004, 'B7': 0.0431372539999999, 'R8': -0.443137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,
      {'cnd': 'dist2', 'R1': -0.44313725400000004, 'G1': 0.01960784400000004, 'B1': 0.0431372539999999, 'R2': -0.44313725400000004, 'G2': 0.01960784400000004, 'B2': 0.0431372539999999, 'R3': -0.44313725400000004, 'G3': 0.01960784400000004, 'B3': 0.0431372539999999, 'R4': -0.44313725400000004, 'G4': 0.01960784400000004, 'B4': 0.0431372539999999, 'R5': -0.44313725400000004, 'G5': 0.01960784400000004, 'B5': 0.0431372539999999, 'R6': -0.44313725400000004, 'G6': 0.01960784400000004, 'B6': 0.0431372539999999, 'R7': -0.44313725400000004, 'G7': 0.01960784400000004, 'B7': 0.0431372539999999, 'R8': -0.4431372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,
      {'cnd': 'dist3', 'R1': -0.44313725400000004, 'G1': 0.01960784400000004, 'B1': 0.0431372539999999, 'R2': -0.44313725400000004, 'G2': 0.01960784400000004, 'B2': 0.0431372539999999, 'R3': -0.44313725400000004, 'G3': 0.01960784400000004, 'B3': 0.0431372539999999, 'R4': -0.44313725400000004, 'G4': 0.01960784400000004, 'B4': 0.0431372539999999, 'R5': -0.44313725400000004, 'G5': 0.01960784400000004, 'B5': 0.0431372539999999, 'R6': -0.44313725400000004, 'G6': 0.01960784400000004, 'B6': 0.0431372539999999, 'R7': -0.44313725400000004, 'G7': 0.01960784400000004, 'B7': 0.0431372539999999, 'R8': -0.4431372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,
      {'cnd': 'dist4', 'R1': -0.44313725400000004, 'G1': 0.01960784400000004, 'B1': 0.0431372539999999, 'R2': -0.44313725400000004, 'G2': 0.01960784400000004, 'B2': 0.0431372539999999, 'R3': -0.44313725400000004, 'G3': 0.01960784400000004, 'B3': 0.0431372539999999, 'R4': -0.44313725400000004, 'G4': 0.01960784400000004, 'B4': 0.0431372539999999, 'R5': -0.44313725400000004, 'G5': 0.01960784400000004, 'B5': 0.0431372539999999, 'R6': -0.44313725400000004, 'G6': 0.01960784400000004, 'B6': 0.0431372539999999, 'R7': -0.44313725400000004, 'G7': 0.01960784400000004, 'B7': 0.0431372539999999, 'R8': -0.4431372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
    Routine Trial_BD
  LoopTerminator trials
  Routine Thanks
